PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'session': '1', 'group': ''}
  Full-screen window = False
  Monitor = OfficeMonitor
  Resources = ['trainingtrials_nonsocial.xlsx', 'trainingtrials_social.xlsx', 'Mandalas_new/neutral/Mandala1_neutral.mp4', 'Mandalas_new/neutral/Mandala2_neutral.mp4', 'Mandalas_new/neutral/Mandala3_neutral.mp4', 'Mandalas_new/neutral/Mandala4_neutral.mp4', 'Mandalas_new/happy/Mandala1_happy.mp4', 'Mandalas_new/happy/Mandala2_happy.mp4', 'Mandalas_new/happy/Mandala3_happy.mp4', 'Mandalas_new/happy/Mandala4_happy.mp4', 'Mandalas_new/angry/Mandala1_angry.mp4', 'Mandalas_new/angry/Mandala2_angry.mp4', 'Mandalas_new/angry/Mandala3_angry.mp4', 'Mandalas_new/angry/Mandala4_angry.mp4', 'ADFES/Freigestellt/Neutral/F01-Neutral-Face Forward_freigestellt.mp4', 'ADFES/Freigestellt/Neutral/F04-Neutral-Face Forward_freigestellt.mp4', 'ADFES/Freigestellt/Neutral/M02-Neutral-Face Forward_freigestellt.mp4', 'ADFES/Freigestellt/Neutral/M06-Neutral-Face Forward_freigestellt.mp4', 'ADFES/Freigestellt/Joy/Used/F01-Joy-Face Forward_freigestellt.mp4', 'ADFES/Freigestellt/Joy/Used/F04-Joy-Face Forward_freigestellt.mp4', 'ADFES/Freigestellt/Joy/Used/M02-Joy-Face Forward_freigestellt.mp4', 'ADFES/Freigestellt/Joy/Used/M06-Joy-Face Forward_freigestellt.mp4', 'ADFES/Freigestellt/Anger/F01-Anger-Face Forward_freigestellt.mp4', 'ADFES/Freigestellt/Anger/F04-Anger-Face Forward_freigestellt.mp4', 'ADFES/Freigestellt/Anger/M02-Anger-Face Forward_freigestellt.mp4', 'ADFES/Freigestellt/Anger/M06-Anger-Face Forward_freigestellt.mp4', 'kanji/training/a.png', 'kanji/training/b.png', 'kanji/training/c.png', 'kanji/training/d.png', 'kanji/4/a.png', 'kanji/4/b.png', 'kanji/4/c.png', 'kanji/4/d.png', 'kanji/3/a.png', 'kanji/3/b.png', 'kanji/3/c.png', 'kanji/3/d.png', 'kanji/2/a.png', 'kanji/2/b.png', 'kanji/2/c.png', 'kanji/2/d.png', 'kanji/1/a.png', 'kanji/1/b.png', 'kanji/1/c.png', 'kanji/1/d.png', 'deco/bubble.png', 'deco/button.png']
  Save log file = False
  Screen = 1
  Units = height
  Use version = 2022.2.4
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = EmoSexCounterbalanced_fontfix
  keyboardBackend = Pyglet
  logging level = debug
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Routines
  Routine Thanks
    TextComponent Thank
      color = $color_choice
      font = $font_choice
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      wrapWidth = 70
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      text:
        Vielen Dank für Ihre Teilnahme!

        Drücken Sie eine beliebige Taste, um das Experiment zu beenden!
    KeyboardComponent end
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Welcome
    CodeComponent code_JS
      Code Type = Both
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        win.color = "black"
    CodeComponent code_5
      Code Type = Both
      Before JS Experiment:
        function weighted_random(items, weights) {
            var i;

            for (i = 0; i < weights.length; i++)
                weights[i] += weights[i - 1] || 0;

            var random = Math.random() * weights[weights.length - 1];


            for (i = 0; i < weights.length; i++)
                if (weights[i] > random)
                    break;

            return items[i];
        }

        function shuffle(array) {
            var currentIndex = array.length,  randomIndex;

            // While there remain elements to shuffle...
            while (currentIndex != 0) {

              // Pick a remaining element...
              randomIndex = Math.floor(Math.random() * currentIndex);
              currentIndex--;

              // And swap it with the current element.
              [array[currentIndex], array[randomIndex]] = [
                array[randomIndex], array[currentIndex]];
            }

            return array;
          }

        class Cue {

            constructor(prob, path){
                this.prob = prob
                this.path = path;
                this.times = NaN;
            }

            get_response(){
                    if (this.prob == "high"){
                        if (weighted_random([true, false], [0.75, 0.25])) {
                            this.response = "happy";
                            this.times = [6, 0];
                        } else {
                            this.response = "angry";
                            this.times = [0, 6]
                        }
                    } else if (this.prob == "low"){
                        if (weighted_random([true, false], [0.25, 0.75])) {
                            this.response = "happy";
                            this.times = [6, 0];
                        } else {
                            this.response = "angry";
                            this.times = [0, 6];
                        }

                    }
            return this.times;
            }
        }

        function getCues(paths){
            var prob_init = ["high", "low"];

            shuffle(prob_init);
            shuffle(paths)

            let left = new Cue(prob_init[0], paths[0]);
            let right = new Cue(prob_init[1], paths[1]);

            return [left, right];
        }

        function switchSides(left, right){
            if (Math.random() > 0.75){
               var [left, right] = [right, left];
               console.log("SWITCH!");
            } else {
               console.log("NO SWITCH!")
            }
            return [left, right];
        }

        function get_kanjis(session){
            var path_k = "kanji/" + String(session);
            const kanjis = ["a.png", "b.png", "c.png", "d.png"]
            var paths = []

            kanjis.forEach((x,i) => {
                paths[i] = path_k + "/" + x
            });

            shuffle(paths)
            return paths
        }
      Begin Experiment:
        import openpyxl
        import numpy
        import random
        from numpy.random import choice
        import os

        win.setColor('black')
        font_choice = 'Menlo'
        color_choice = 'white'
      Begin JS Experiment:
        var font_choice = 'Helvetica';
        var color_choice = 'white';

        window.Welcome_head = Welcome_head
        window.Welcome_text = Welcome_text
      Begin JS Routine:
        Welcome_head.bold = true;
        Welcome_head.setAlignHoriz('center')
        Welcome_text.setAlignHoriz('center')
        text_3.setAlignHoriz('center')
        text_4.setAlignHoriz('center')
        text.setAlignHoriz('center')
      Begin Routine:
        Welcome_head.bold = True
    TextComponent Welcome_head
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Vielen Dank für die Teilnahme an diesem Experiment!
      wrapWidth = 70
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    TextComponent Welcome_text
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 70
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      text:
        Sie werden im Folgenden aufgefordert, zwischen zwei
        Symbolen, die Sie auf der linken und rechten Seite des
        Bildschirms sehen werden, zu wählen.

        Sie können dies tun, indem Sie den Schieberegler am
        unteren Rand mit der Maus nach links oder rechts
        verschieben.

        Ob Sie richtig gewählt haben, wird durch ein Bild in der
        Mitte des Bildschirms angezeigt.

        Wir beginnen mit einigen Probeläufen, damit Sie den
        Ablauf des Experiments kennenlernen können.

        Drücken Sie eine beliebige Taste, um fortzufahren!
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine BlockCode
    CodeComponent BlockCode1
      Code Type = Both
      Before JS Experiment:
        var BlockCounter = 0;
        var CycleCounter = 0;
        var TrialCounter = 0;

        //function randomUniqueNum(min, max, even, outputCount) {
        //
        //    let arr = []
        //    if (even == true){
        //      for (let i = min; i <= max; i+=2) {
        //        arr.push(i)
        //      }
        //    } else {
        //      for (let i = min + 1; i <= max; i+=2) {
        //        arr.push(i)
        //      }
        //    }

        //    let result = [];
        //    for (let i = 1; i <= outputCount; i++) {
        //      const randomIndex = Math.floor(Math.random() * arr.length);
        //      result.push(arr[randomIndex]);
        //      arr.splice(randomIndex, 1);
        //    }

        //    return result;
        //}

        //generate random numbers
        //var fNeven = randomUniqueNum(10,99, true, 4)
        //var fNodd = randomUniqueNum(10,99, false, 4)

        //var numbarray = [fNeven, fNodd, fNeven, fNodd]

        //Set up list with correct category (4 per cycle * 4 blocks, randomized)
        //var CorrCat = [];

        //for (let i = 1; i <= 2; i++) {
        //    var ABlist = ["A", "A", "B", "B"];
        //    shuffle(ABlist);
        //    CorrCat.push(ABlist);
        //}

        //var fN = numbarray.slice(0,2).flat()

        //Set up dict with correct category for lookup
        //var CorrDict = {};
        //fN.forEach((key, i) => CorrDict[key] = CorrCat.flat()[i]);
        //console.log(CorrDict)
      Begin Experiment:
        #Set up order of Blocks (beginning randomized, then alternating)
        Blocklist = ["social", "nonsocial"]
        random.shuffle(Blocklist)
        Blocklist = Blocklist*2
      Begin JS Experiment:
        //Set up order of Blocks (beginning randomized, then alternating)
        console.log("Blocklist: ", Blocklist)
        Blocklist = ["social", "nonsocial"];
        console.log("Blocklist: ", Blocklist)
        Blocklist = shuffle(Blocklist)
        console.log("Blocklist: ", Blocklist)
        Blocklist = Blocklist.concat(Blocklist)
        console.log("Blocklist:", Blocklist)
        console.log("BlockCounter: ", BlockCounter)
        console.log("Blocklist[BlockCounter]:", Blocklist[BlockCounter])
        console.log("Blocklist[BlockCounter] == 'social':", Blocklist[BlockCounter] == "social")
        //Set up 16 2-digit stimuli, no replacement
        //Define function unique random numbers
      Begin JS Routine:
        if (Blocklist[BlockCounter] == "social") {
            //trial_file = "trainingtrials_social.xlsx";
            filenames_noxl = [  ["ADFES/Freigestellt/Neutral/F01-Neutral-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Joy/Used/F01-Joy-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Anger/F01-Anger-Face Forward_freigestellt.mp4"],
                                ["ADFES/Freigestellt/Neutral/F04-Neutral-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Joy/Used/F04-Joy-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Anger/F04-Anger-Face Forward_freigestellt.mp4"],
                                ["ADFES/Freigestellt/Neutral/M02-Neutral-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Joy/Used/M02-Joy-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Anger/M02-Anger-Face Forward_freigestellt.mp4"],
                                ["ADFES/Freigestellt/Neutral/M06-Neutral-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Joy/Used/M06-Joy-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Anger/M06-Anger-Face Forward_freigestellt.mp4"]];
        } else {
            if (Blocklist[BlockCounter] == "nonsocial") {
                //trial_file = "trainingtrials_nonsocial.xlsx";
                filenames_noxl = [  ["Mandalas_new/neutral/Mandala1_neutral.mp4", "Mandalas_new/happy/Mandala1_happy.mp4", "Mandalas_new/angry/Mandala1_angry.mp4"],
                                    ["Mandalas_new/neutral/Mandala2_neutral.mp4", "Mandalas_new/happy/Mandala2_happy.mp4", "Mandalas_new/angry/Mandala2_angry.mp4"],
                                    ["Mandalas_new/neutral/Mandala3_neutral.mp4", "Mandalas_new/happy/Mandala3_happy.mp4", "Mandalas_new/angry/Mandala3_angry.mp4"],
                                    ["Mandalas_new/neutral/Mandala4_neutral.mp4", "Mandalas_new/happy/Mandala4_happy.mp4", "Mandalas_new/angry/Mandala4_angry.mp4"]];
            }
        }

        console.log("filenames_noxl:" + filenames_noxl)
        /*path = os.path.join(cwd, trial_file)
        book = openpyxl.load_workbook(filename = path)
        sheet = book.active

        listAB = ['A', 'B']*2
        random.shuffle(listAB)

        for index, element in enumerate(listAB, start=1):
        sheet.cell(row = index + 1, column = 5).value = element

        filenames = []
        for x in range(4):
        filenames.append([])

        #here you iterate over the rows in the specific column
        for row in range(2,6):
        for column in "BCD":  #Here you can add or reduce the columns
        cell_name = "{}{}".format(column, row)
        filenames[row-2].append(sheet[cell_name].value) # the value of the specific cell

        randnumbers = []
        for x in range(1, 5):
        randnumbers.append(random.randint(9, 99))

        for row in range(2,6):
        for column in "A":  #Here you can add or reduce the columns
        cell_name = "{}{}".format(column, row)
        sheet[cell_name].value = randnumbers[row-2]# the value of the specific cell

        book.save(filename = trial_file)*/
      Begin Routine:
        #Define filenames according to Block
        if Blocklist[blocks.thisRepN]== "social":
            trial_file = "trainingtrials_social.xlsx"
            #filenames_noxl = [
            #    ["ADFES/Freigestellt/Neutral/F01-Neutral-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Joy/Used/F01-Joy-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Anger/F01-Anger-Face Forward_freigestellt.mp4"],
            #   ["ADFES/Freigestellt/Neutral/F04-Neutral-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Joy/Used/F04-Joy-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Anger/F04-Anger-Face Forward_freigestellt.mp4"],
            #   ["ADFES/Freigestellt/Neutral/M06-Neutral-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Joy/Used/M06-Joy-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Anger/M06-Anger-Face Forward_freigestellt.mp4"],
            #   ["ADFES/Freigestellt/Neutral/M02-Neutral-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Joy/Used/M02-Joy-Face Forward_freigestellt.mp4", "ADFES/Freigestellt/Anger/M02-Anger-Face Forward_freigestellt.mp4"]
            #]
        elif Blocklist[blocks.thisRepN] == "nonsocial":
            trial_file = "trainingtrials_nonsocial.xlsx"
            #filenames_noxl = [
            #   ["Mandalas_new/neutral/Mandala3_neutral.mp4", "Mandalas_new/happy/Mandala3_happy.mp4", "Mandalas_new/angry/Mandala3_angry.mp4"],
            #   ["Mandalas_new/neutral/Mandala2_neutral.mp4", "Mandalas_new/happy/Mandala2_happy.mp4", "Mandalas_new/angry/Mandala2_angry.mp4"],
            #   ["Mandalas_new/neutral/Mandala4_neutral.mp4", "Mandalas_new/happy/Mandala4_happy.mp4", "Mandalas_new/angry/Mandala4_angry.mp4"],
            #   ["Mandalas_new/neutral/Mandala1_neutral.mp4", "Mandalas_new/happy/Mandala1_happy.mp4", "Mandalas_new/angry/Mandala1_angry.mp4"]
            #]
  Routine LateralizationByCycle
    CodeComponent code_8
      Code Type = Both
      Begin Experiment:
        CycleText = ''
      Begin JS Experiment:
        CycleText = "";
      Begin JS Routine:
        /*function randomChoice(arr) {
          return arr[Math.floor(Math.random() * arr.length)];
        }*/

        //if (randomChoice([true, false])) {
        //    right_cat = "A";
        //    left_cat = "B";
        //} else {
        //    left_cat = "A";
        //    right_cat = "B";
        //}


        console.log("BlockCounter: ", BlockCounter)
        //shuffle(numbarray[BlockCounter]);
        //console.log("numbarray[BlockCounter]:", numbarray[BlockCounter]);
        shuffle(filenames_noxl);
        console.log("Cycletext for next block cond: ", ((BlockCounter in [1, 2, 3]) && (CycleCounter == 0)))

        //"blocks:" + BlockCounter.toString()) +
            //", cycles:") + CycleCounter.toString()) + "\nright_cat: ") +
            //right_cat.toString()) + " left_cat: ") +
            //left_cat.toString()) +
        if (((BlockCounter == 0) && (CycleCounter == 0))) {
          CycleText1_dur = undefined;
          CycleText2_dur = 0;
          CycleText3_dur = 0;
          CycleText4_dur = 0;
        } else if (([0, 1, 2, 3].includes(BlockCounter)) && ([1,2, 3, 4, 5].includes(CycleCounter))) {
          continueRoutine = false;
        } else if ([2, 3].includes(BlockCounter) && (CycleCounter == 0)) {
          CycleText1_dur = 0;
          CycleText2_dur = undefined;
          CycleText3_dur = 0;
          CycleText4_dur = 0;
        } else if((BlockCounter == 1) && (CycleCounter == 0)) {
          CycleText1_dur = 0;
          CycleText2_dur = 0;
          CycleText3_dur = 0;
          CycleText4_dur = undefined;
        }
      Begin Routine:
        #Define Text, dependent on Block and Cycle
        if blocks.thisN == 0 and cycles.thisRepN == 0:
            CycleText1_dur = 10
            CycleText2_dur = 0
            CycleText3_dur = 0
            CycleText4_dur = 0
        elif blocks.thisN in [0, 1, 2, 3] and cycles.thisRepN == 1:
            CycleText1_dur = 0
            CycleText2_dur = 10
            CycleText3_dur = 0
            CycleText4_dur = 0
        elif blocks.thisN in [0, 1, 2, 3] and cycles.thisRepN in [2, 3, 4, 5, 6, 7, 8]:
            CycleText1_dur = 0
            CycleText2_dur = 0
            CycleText3_dur = 10
            CycleText4_dur = 0
        elif blocks.thisN in [1, 2, 3] and cycles.thisRepN == 0:
            CycleText1_dur = 0
            CycleText2_dur = 0
            CycleText3_dur = 0
            CycleText4_dur = 10
    TextComponent CycleText1
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $CycleText1_dur
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      text:
        Wir beginnen jetzt mit dem ersten Block.

        Alles wird genauso ablaufen wie bei den
        Trainingsversuchen. Beachten Sie, dass die
        Symbole die Seiten wechseln können!

        Geben Sie Ihre Antwort, indem Sie auf den
        Schieberegler unten klicken.

        Drücken Sie eine beliebige Taste, um den ersten
        Block zu starten!
    TextComponent CycleText2
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $CycleText2_dur
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      text:
        PAUSE

        Sie haben einen weiteren Block abgeschlossen! Im nächsten Block werden sich die Symbole und Bilder wieder ändern!

        Drücken Sie eine beliebige Taste,
        um den nächsten Block zu starten.
    TextComponent CycleText3
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $CycleText3_dur
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      text [set every repeat]:
        PAUSE

        Press any key, to start the next cycle.
    TextComponent CycleText4
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $CycleText4_dur
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      text:
        Sie haben nun einen Block abgeschlossen.

        Im nächsten Block werden Sie andere
        Bilder sehen.

        Wie bei den Trainingsversuchen haben Sie es
        entweder mit Menschen oder einem Kaleidoskop zu tun.

        Wenn Sie bereit sind, drücken Sie eine
        beliebige Taste, um den nächsten Block zu
        starten.
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Alles_Klar_2
    TextComponent Allesklartext_2
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 70
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      text:
        Wie Sie gesehen haben, ändert sich das Bild in der
        Mitte wieder in Abhängigkeit von Ihrer Antwort.

        Auch hier sind die Symbole etwas zweideutig, so
        dass ein Symbol in einer Runde zu einem Start
        (ein buntes, bewegtes Bild) und in der nächsten
        Runde zu einem grauen, verschwommenen Bild führen
        kann.

        Die verschiedenen Bilder sagen aber nichts über die
        Wahrscheinlichkeit aus, mit der ein Symbol zu einem Start
        führt.

        Drücken Sie eine beliebige Taste, um fortzufahren!
    KeyboardComponent Allesklar_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Intertrial_Interval
    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        console.log(TrialCounter);
        console.log(CycleCounter);
        console.log(BlockCounter)
      End JS Routine:
        if(TrialCounter < 3){
        TrialCounter = TrialCounter + 1;
        } else {
            if(TrialCounter == 3) {
                TrialCounter = 0;
                console.log("TrialCounter reset to: " + TrialCounter)
            }
        }
  Routine trial
    CodeComponent code_4
      Code Type = Both
      Before Experiment:
        class Cue:
            low = [0.25, 0.75]
            high = [0.75, 0.25]

            def __init__(self, prob, path):
                if prob == "low":
                    self.prob = self.low
                elif prob == "high":
                    self.prob = self.high
                self.path = path
                # Initialize instance attributes (assigned later)
                self.times = None

            def get_response(self):
                if choice([True, False], p=self.prob):
                    # happy
                    self.times = [6, 0]
                else:
                    # angry
                    self.times = [0, 6]
                return self.times

        def getCues(paths):
            prob_init = ["high", "low"]
            shuffle(prob_init)
            shuffle(paths)

            left = Cue(prob_init[0], paths[0])
            right = Cue(prob_init[1], paths[1])

            return left, right

        def switchSides(left, right):
            if choice([True, False]):
                left, right = right, left
            return left, right

        def get_kanjis(session):
            path = os.path.join("kanji", session)
            kanjis = [os.path.join(path, file) for file in sorted(os.listdir(path))]
            shuffle(kanjis)
            return kanjis
      Before JS Experiment:
        console.log("expInfo['session']: ", expInfo['session'])

        var kanjis;
        var social_cues;
        var nonsocial_cues;
        var CueLeft_s;
        var CueRight_s;
        var CueLeft_ns;
        var CueRight_ns;
      Begin Experiment:
        kanjis = get_kanjis(expInfo['session'])

        thisExp.addData("kanjis", kanjis)

        social_cues = kanjis[0:2]
        nonsocial_cues = kanjis[2:]

        CueLeft_s, CueRight_s = getCues(social_cues)
        CueLeft_ns, CueRight_ns = getCues(nonsocial_cues)
      Begin JS Experiment:
        console.log("expInfo['session']: ", expInfo['session'])

        kanjis = get_kanjis(expInfo['session']);

        social_cues = kanjis.slice(0, 2);
        nonsocial_cues = kanjis.slice(2);

        [CueLeft_s, CueRight_s] = getCues(social_cues);
        [CueLeft_ns, CueRight_ns] = getCues(nonsocial_cues);

        console.log("CueLeft_s: ", CueLeft_s);
        console.log("CueRight_s: ", CueRight_s);
      Begin JS Routine:
        console.log("filenames_noxl[currentLoop.thisN]: ", filenames_noxl[currentLoop.thisN])
        filename_thisN_neutral = filenames_noxl[currentLoop.thisN][0];
        filename_thisN_happy = filenames_noxl[currentLoop.thisN][1];
        filename_thisN_angry = filenames_noxl[currentLoop.thisN][2];
        console.log("filename_thisN_neutral: ", filename_thisN_neutral);


        if ((currentLoop.name == "training_social" && currentLoop.thisN == 0) || (currentLoop.name == "trials" && currentLoop.thisN == 0 && Blocklist[blocks.thisRepN] == "social")){
            CueLeft = CueLeft_s;
            CueRight = CueRight_s;
            deco = "deco/bubble.png";
            deco_pos_left = [-0.6, -0.04];
            deco_pos_right = [0.6, -0.04];
            symb = "ist eher ein Lob";
            } else if ((currentLoop.name == "training_nonsocial" && currentLoop.thisN == 0) || (currentLoop.name == "trials" && currentLoop.thisN == 0 && Blocklist[blocks.thisRepN] == "nonsocial")){
            CueLeft = CueLeft_ns;
            CueRight = CueRight_ns;
            deco = "deco/button.png";
            deco_pos_left = [-0.6, -0.01];
            deco_pos_right = [0.6, -0.01];
            symb = "steht eher für Start";
            }

        [CueLeft, CueRight] = switchSides(CueLeft, CueRight)

        cue_left_path = CueLeft.path;
        cue_right_path = CueRight.path;

        console.log("CueLeft: ", CueLeft);
        console.log("CueRight: ", CueRight);
        console.log("deco", deco);
        console.log("deco_pos_left", deco_pos_left);
            console.log("deco_pos_right", deco_pos_right);
      Begin Routine:
        if (currentLoop.name == "training_social" and currentLoop.thisN == 0) or (currentLoop.name == "trials" and currentLoop.thisN == 0 and Blocklist[blocks.thisRepN] == "social"):
            CueLeft = CueLeft_s
            CueRight = CueRight_s
            deco = "deco/bubble.png"
            deco_pos_left = (-0.6, -0.04)
            deco_pos_right = (0.6, -0.04)
        elif (currentLoop.name == "training_nonsocial" and currentLoop.thisN == 0) or (currentLoop.name == "trials" and currentLoop.thisN == 0 and Blocklist[blocks.thisRepN] == "nonsocial"):
            CueLeft = CueLeft_ns
            CueRight = CueRight_ns
            deco = "deco/button.png"
            deco_pos_left = (-0.6, -0.01)
            deco_pos_right = (0.6, -0.01)

        CueLeft, CueRight = switchSides(CueLeft, CueRight)

        cue_left_path = CueLeft.path
        cue_right_path = CueRight.path
      End JS Routine:
        //thisExp.addData("left", left_cat);
        //thisExp.addData("right", right_cat);
        //thisExp.addData("stim", Stim);
        //if ((response_training.keys === "left")) {
        //    thisExp.addData("ParticipantAnswer", left_cat);
        //} else {
        //    if ((response_training.keys === "right")) {
        //        thisExp.addData("ParticipantAnswer", right_cat);
        //    } else {
        //        if ((response_training.keys === null)) {
        //            thisExp.addData("ParticipantAnswer", null);
        //        }
        //    }
        //}
    TextComponent trial_header
      font = $font_choice
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      text [set every repeat] = $'Welches Symbol ' + symb + ' ?'
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    TextComponent fix_cross
      color = $color_choice
      font = $font_choice
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = +
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    MovieComponent new_neutral
      No audio = True
      backend = moviepy
      forceEndRoutine = True
      movie [set every repeat] = $filename_thisN_neutral
      size = [0.625, 0.5]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 6
      units = height
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    ImageComponent deco_left
      disabled = True
      image [set every repeat] = $deco
      pos [set every repeat] = deco_pos_left
      size = (0.4, 0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 6.0
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    ImageComponent deco_right
      disabled = True
      image [set every repeat] = $deco
      pos [set every repeat] = deco_pos_right
      size = (0.4, 0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 6.0
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    ImageComponent cue_left
      durationEstim = 6
      image [set every repeat] = $cue_left_path
      pos = (-0.6, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      texture resolution = 512
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    ImageComponent cue_right
      durationEstim = 6
      image [set every repeat] = $cue_right_path
      pos = (0.6, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      texture resolution = 512
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    SliderComponent slide_response
      color = White
      durationEstim = 6
      fillColor = White
      font = $font_choice
      forceEndRoutine = True
      granularity = 0
      labels = ["Sicher links", "Vielleicht links", "Weiß nicht", "Vielleicht rechts", "Sicher rechts"]
      letterHeight = 0.025
      pos = (0, -0.35)
      size = (1.25, 0.05)
      startVal [time (s)] = 1
      styles = rating
      ticks = [1, 2, 3, 4, 5]
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  Routine Alles_klar
    TextComponent text_4
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 70
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      text:
        Wie Sie gesehen haben, verändert sich das Bild in
        der Mitte in Abhängigkeit von Ihrer Antwort.

        Ein fröhliches Gesicht bedeutet, dass das von
        Ihnen gewählte Wort als Lob interpretiert wurde.
        Ein wütendes Gesicht bedeutet, dass das Wort als
        Beleidigung interpretiert wurde.

        Allerdings sind diese Wörter etwas zweideutig, so
        dass manchmal ein eher freundliches Wort als
        Beleidigung interpretiert wird und umgekehrt.

        Die verschiedenen Personen reagieren aber alle ähnlich.
        Es gibt also keine Unterschiede in der Wahrscheinlichkeit,
        wie die Wörter interpretiert werden.

        Drücken Sie eine beliebige Taste, um fortzufahren!
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_train_ns
    TextComponent text
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 70
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      text:
        In der nächsten Runde sehen Sie links und rechts andere
        Symbole und andere Bilder in der Mitte.

        Stellen Sie sich diesmal vor, dass Sie eine Art
        Kaleidoskop vor sich haben.

        Durch Auswählen der Symbole wird das Bild in der Mitte
        entweder bunt und bewegt (= das Kaleidoskop wird
        gestartet) oder grau.

        Sie können das Symbol wieder auswählen, indem Sie
        den Schieberegler am unteren Rand mit der Maus
        verschieben. Auch hier können Sie auswählen, wie sicher
        Sie sich sind, indem Sie den Schieberegler weiter nach
        links oder rechts verschieben.

        Probieren wir es aus!
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_train_s
    TextComponent text_3
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 40
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      text:
        Sie werden gleich links und rechts auf dem
        Bildschirm zwei Symbole sehen, die Wörter
        darstellen.

        Eines davon wird wahrscheinlich als
        Lob interpretiert werden, das andere als
        Beleidigung.

        Stellen Sie sich vor, Sie wählen das Symbol aus
        und sagen dieses Wort zu der Person in der Mitte
        des Bildschirms. Anhand der Reaktion der Person können Sie
        erkennen, wie das Wort von dieser interpretiert wurde.

        Sie können das Symbol auswählen, indem Sie den
        Schieberegler am unteren Rand mit der Maus nach links oder
        rechts verschieben. Sie können angeben, wie sicher Sie
        sich sind, indem Sie den Schieberegler weiter nach links
        oder rechts verschieben.

        Versuchen wir eine erste Runde!
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback_train
    CodeComponent code_9
      Code Type = Both
      Before JS Experiment:
        var train_times = [[6, 0], [6, 0], [0, 6], [0, 6]];
        shuffle(train_times);
        var resp = NaN;

        var times;
      Begin Experiment:
        train_times = [[6, 0], [6, 0], [0, 6], [0, 6]]
        shuffle(train_times)
        resp = None
      Begin JS Routine:
        console.log("SLIDER RESPONSE: ", slide_response_2.getRating());
        console.log("slide_response_2.getRating() == undefined", slide_response_2.getRating() == undefined)
        console.log("number of trial: ", currentLoop.thisN);
        console.log("deco", deco);

        times = train_times[currentLoop.thisN];
        console.log("times", times);

        if (slide_response_2.getRating() == undefined){
            time_miss = 6.0;
            time_h = 0;
            time_a = 0;
            resp = undefined;
        } else {
            time_miss = 0;
            time_h = times[0];
            time_a = times[1];
            if (slide_response_2.getRating() > 3){
                resp = "right";
            } else {
                resp = "left";
            }
        }

        console.log("time_miss: ", time_miss);
        console.log("time_h: ", time_h);
        console.log("time_a: ", time_a);
        console.log("resp: ", resp);
        console.log("resp == 'right': ", resp == "right")
      Begin Routine:
        #Feedback Training

        print("SLIDER RESPONSE: ", slide_response_2.getRating())
        print("number of trial: ", currentLoop.thisN)

        times = train_times[currentLoop.thisN]

        if slide_response_2.getRating() == None:
            time_miss = 6.0
            time_h = 0
            time_a = 0
            resp = None
        else:
            time_miss = 0
            time_h = times[0]
            time_a = times[1]
            if slide_response_2.getRating() > 2.5:
                resp = "right"
            else:
                resp = "left"

        print("resp: ", resp)
    TextComponent feedback_miss
      color = $color_choice
      durationEstim = 6
      font = $font_choice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_miss
      text = BITTE RECHTZEITIG ANTWORTEN!
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    MovieComponent new_angry_2
      No audio = True
      backend = moviepy
      durationEstim = 6
      forceEndRoutine = False
      movie [set every repeat] = $filename_feedback_angry
      size = [0.625, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_a
      units = height
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    MovieComponent new_happy_2
      backend = moviepy
      durationEstim = 6
      forceEndRoutine = False
      movie [set every repeat] = $filename_feedback_happy
      size = [0.625, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_h
      units = height
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    PolygonComponent box_l
      lineWidth = 2
      opacity [set every repeat] = resp == "left"
      pos = (-0.6, 0)
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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    PolygonComponent box_r
      lineWidth = 2
      opacity [set every repeat] = resp == "right"
      pos = (0.6, 0)
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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    ImageComponent deco_left_fb
      disabled = True
      image [set every repeat] = $deco
      pos [set every repeat] = deco_pos_left
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6.0
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    ImageComponent deco_right_fb
      disabled = True
      image [set every repeat] = $deco
      pos [set every repeat] = deco_pos_right
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6.0
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    ImageComponent cue_left_fb
      image [set every repeat] = $cue_left_path
      pos = (-0.6, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      texture resolution = 512
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    ImageComponent cue_right_fb
      image [set every repeat] = $cue_right_path
      pos = (0.6, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      texture resolution = 512
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  Routine LatCounter
    CodeComponent code_2
      Code Type = Both
      End JS Routine:
        if(CycleCounter < 5){
        CycleCounter = CycleCounter + 1;
        } else {
            if(CycleCounter == 5) {
                CycleCounter = 0;
                console.log("CycleCounter reset to:" + CycleCounter)
            }
        }
  Routine BlockCounter
    CodeComponent code_3
      Code Type = Both
      End JS Routine:
        if(BlockCounter < 3){
        BlockCounter = BlockCounter + 1;
        } else {
            if(BlockCounter == 3) {
                BlockCounter = 0;
                console.log("BlockCounter reset to: " + BlockCounter)
            }
        }
  Routine Alles_Klar_3
    CodeComponent Allesklarcode_4
      Code Type = Both
      Begin Experiment:
        Allesklar = centerfy('Beim letzten Durchgang haben Bild und Text nicht übereingestimmt!\n Dies wird im richtigen Experiment aber nur selten passieren.\n\n'
        'Den Text unten werden Sie im Folgenden nicht mehr angezeigt bekommen.\n\n'
        'Versuchen Sie einfach, so gut es geht, die richtige Antwort zu geben!\n')
    TextComponent Allesklartext
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 70
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      text:
        Did you notice? In the last pass, the picture and text didn't match!

        But this will rarely happen in the real experiment.

        You won't see the text below in the following.

        Just try to give the right answer as best you can!
    KeyboardComponent Allesklar_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback_trials
    CodeComponent code_13
      Code Type = Both
      Begin JS Routine:
        if (slide_response.getRating() == undefined){
            time_miss = 6.0;
            time_h = 0;
            time_a = 0;
            resp = undefined;
        } else {
            if (slide_response.getRating() > 3){
                resp = "right";
                times = CueRight.get_response()
            } else {
                resp = "left";
                times = CueLeft.get_response()
            }
            time_h = times[0]
            time_a = times[1]
            time_miss = 0
        }
      Begin Routine:
        #Feedback Training

        print("block: ", blocks.thisN)
        print("blockType: ", Blocklist[blocks.thisRepN])
        print("trial: ", currentLoop.thisN)
        print("SLIDER RESPONSE: ", slide_response.getRating())


        if slide_response.getRating() == None:
            time_miss = 6.0
            time_h = 0
            time_a = 0
            resp = None
        else:
            if slide_response.getRating() > 2.5:
                resp = "right"
                times = CueRight.get_response()
                print("resp: ", resp)
                print("CueRight.path: ", CueRight.path)
                print("CueRight.prob: ", CueRight.prob)
                print("times: ", times)
            else:
                resp = "left"
                times = CueLeft.get_response()
                print("resp: ", resp)
                print("CueLeft.path: ", CueLeft.path)
                print("CueLeft.prob: ", CueLeft.prob)
                print("times: ", times)
            time_h = times[0]
            time_a = times[1]
            time_miss = 0
      End JS Routine:
        thisExp.addData("block", blocks.thisN)
        thisExp.addData("blockType", Blocklist[blocks.thisRepN])
        thisExp.addData("SLIDER RESPONSE", slide_response.getRating())
        thisExp.addData("resp", resp)
        thisExp.addData("CueRight.path", CueRight.path)
        thisExp.addData("CueRight.prob", CueRight.prob)
        thisExp.addData("CueLeft.path", CueLeft.path)
        thisExp.addData("CueLeft.prob", CueLeft.prob)
        thisExp.addData("times", times)
        thisExp.addData("time_h", time_h)
        thisExp.addData("time_a", time_a)

        if(time_h == 6){
            thisExp.addData("reward", 1)
        } else {
            thisExp.addData("reward", 0)
        }
      End Routine:
        thisExp.addData("block", blocks.thisN)
        thisExp.addData("blockType", Blocklist[blocks.thisRepN])
        thisExp.addData("SLIDER RESPONSE", slide_response.getRating())
        thisExp.addData("resp", resp)
        thisExp.addData("CueRight.path", CueRight.path)
        thisExp.addData("CueRight.prob", CueRight.prob)
        thisExp.addData("CueLeft.path", CueLeft.path)
        thisExp.addData("CueLeft.prob", CueLeft.prob)
        thisExp.addData("times", times)
        thisExp.addData("time_h", time_h)
        thisExp.addData("time_a", time_a)
    TextComponent feedback_miss_2
      color = $color_choice
      font = $font_choice
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_miss
      text = BITTE RECHTZEITIG ANTWORTEN!
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    MovieComponent new_angry_5
      No audio = True
      backend = moviepy
      durationEstim = 6
      forceEndRoutine = False
      movie [set every repeat] = $filename_thisN_angry
      size = [0.625, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_a
      units = height
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    MovieComponent new_happy_5
      backend = moviepy
      durationEstim = 6
      forceEndRoutine = False
      movie [set every repeat] = $filename_thisN_happy
      size = [0.625, 0.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_h
      units = height
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    PolygonComponent box_l_2
      fillColor = None
      lineWidth = 2
      opacity [set every repeat] = resp == "left"
      pos = (-0.6, 0)
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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    PolygonComponent box_r_2
      fillColor = None
      lineWidth = 2
      opacity [set every repeat] = resp == "right"
      pos = (0.6, 0)
      shape = rectangle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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    ImageComponent deco_left_fb_2
      disabled = True
      image [set every repeat] = $deco
      pos [set every repeat] = deco_pos_left
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6.0
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    ImageComponent deco_right_fb_2
      disabled = True
      image [set every repeat] = $deco
      pos [set every repeat] = deco_pos_right
      size = (0.4, 0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6.0
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    ImageComponent cue_left_fb_2
      image [set every repeat] = $cue_left_path
      pos = (-0.6, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      texture resolution = 512
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    ImageComponent cue_right_fb_2
      image [set every repeat] = $cue_right_path
      pos = (0.6, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      texture resolution = 512
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  Routine training_trial
    CodeComponent code_14
      Code Type = Both
      Before JS Experiment:
        var deco;
        var deco_pos_left;
        var deco_pos_right;
        var cue_left_path;
        var cue_right_path;
        var CueLeft;
        var CueRight;

        var kanjis_t = get_kanjis("training");

        var social_cues_t = kanjis_t.slice(0, 2);
        var nonsocial_cues_t = kanjis_t.slice(2);
        console.log("social_cues_t: ", social_cues_t)
        console.log("nonsocial_cues_t: ", nonsocial_cues_t)
        console.log("getCues(social_cues_t): ", getCues(social_cues_t))

        var [CueLeft_s_t, CueRight_s_t] = getCues(social_cues_t);
        console.log("CueLeft_s_t: ", CueLeft_s_t)
        console.log("CueRight_s_t: ", CueRight_s_t)
        var [CueLeft_ns_t, CueRight_ns_t] = getCues(nonsocial_cues_t);
        console.log("CueLeft_ns_t: ", CueLeft_ns_t)
        console.log("CueRight_ns_t: ", CueRight_ns_t)

        var symb;
      Begin Experiment:
        kanjis_t = get_kanjis("training")

        thisExp.addData("kanjis_training", kanjis_t)

        social_cues_t = kanjis_t[0:2]
        nonsocial_cues_t = kanjis_t[2:]

        CueLeft_s_t, CueRight_s_t = getCues(social_cues_t)
        CueLeft_ns_t, CueRight_ns_t = getCues(nonsocial_cues_t)
      Begin JS Routine:
        if ((currentLoop.name == "training_social" && currentLoop.thisN == 0) || (currentLoop.name == "trials" && currentLoop.thisN == 0 && Blocklist[blocks.thisRepN] == "social")){
            console.log("currentLoop.name: ", currentLoop.name)
            console.log("currentLoop.thisN: ", currentLoop.thisN)
            CueLeft = CueLeft_s_t;
            console.log("CueLeft: ", CueLeft);
            CueRight = CueRight_s_t;
            console.log("CueRight: ", CueRight);
            deco = "deco/bubble.png";
            console.log("deco", deco);
            deco_pos_left = [-0.6, -0.04];
            console.log("deco_pos_left", deco_pos_left);
            deco_pos_right = [0.6, -0.04];
            console.log("deco_pos_right", deco_pos_right);
            symb = "ist eher ein Lob";
            } else if ((currentLoop.name == "training_nonsocial" && currentLoop.thisN == 0) || (currentLoop.name == "trials" && currentLoop.thisN == 0 && Blocklist[blocks.thisRepN] == "nonsocial")){
            CueLeft = CueLeft_ns_t;
            CueRight = CueRight_ns_t;
            deco = "deco/button.png";
            deco_pos_left = [-0.6, -0.01];
            deco_pos_right = [0.6, -0.01];
            symb = "steht eher für Start";
            }

        cue_left_path = CueLeft.path;
        cue_right_path = CueRight.path;
      Begin Routine:
        if (currentLoop.name == "training_social" and currentLoop.thisN == 0) or (currentLoop.name == "trials" and currentLoop.thisN == 0 and Blocklist[blocks.thisRepN] == "social"):
            CueLeft = CueLeft_s_t
            CueRight = CueRight_s_t
            deco = "deco/bubble.png"
            deco_pos_left = (-0.6, -0.04)
            deco_pos_right = (0.6, -0.04)
        elif (currentLoop.name == "training_nonsocial" and currentLoop.thisN == 0) or (currentLoop.name == "trials" and currentLoop.thisN == 0 and Blocklist[blocks.thisRepN] == "nonsocial"):
            CueLeft = CueLeft_ns_t
            CueRight = CueRight_ns_t
            deco = "deco/button.png"
            deco_pos_left = (-0.6, -0.01)
            deco_pos_right = (0.6, -0.01)

        cue_left_path = CueLeft.path
        cue_right_path = CueRight.path
    TextComponent text_2
      font = $font_choice
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      text [set every repeat] = $'Welches Symbol ' + symb + ' ?'
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    TextComponent fix_cross_3
      color = $color_choice
      font = $font_choice
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = +
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    MovieComponent new_neutral_3
      No audio = True
      backend = moviepy
      forceEndRoutine = True
      movie [set every repeat] = $filename_neutral
      size = [0.625, 0.5]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 6
      units = height
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    ImageComponent deco_left_2
      disabled = True
      image [set every repeat] = $deco
      pos [set every repeat] = deco_pos_left
      size = (0.4, 0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 6.0
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    ImageComponent deco_right_2
      disabled = True
      image [set every repeat] = $deco
      pos [set every repeat] = deco_pos_right
      size = (0.4, 0.4)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 6.0
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    ImageComponent cue_left_2
      durationEstim = 6
      image [set every repeat] = $cue_left_path
      pos = (-0.6, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      texture resolution = 512
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    ImageComponent cue_right_2
      durationEstim = 6
      image [set every repeat] = $cue_right_path
      pos = (0.6, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 1
      texture resolution = 512
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    SliderComponent slide_response_2
      color = White
      durationEstim = 6
      fillColor = White
      font = $font_choice
      forceEndRoutine = True
      granularity = 0
      labels = ["Sicher links", "Vielleicht links", "Weiß nicht", "Vielleicht rechts", "Sicher rechts"]
      letterHeight = 0.025
      pos = (0, -0.35)
      size = (1.25, 0.05)
      startVal [time (s)] = 1
      styles = rating
      ticks = [1, 2, 3, 4, 5]
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  Routine check_social
    CodeComponent code_check_s
      Code Type = Both
      End JS Routine:
        if (slider_check_s.getRating() > 3){
                resp = "right";
        } else {
                resp = "left";
        }

        console.log("resp_s: ", resp)

        thisExp.addData("slider_check_s: ", slider_check_s.getRating())
        thisExp.addData("resp_check_s", resp)
        thisExp.addData("CueRight_s.path", CueRight_s.path)
        thisExp.addData("CueRight_s.prob", CueRight_s.prob)
        thisExp.addData("CueLeft_s.path", CueLeft_s.path)
        thisExp.addData("CueLeft_s.prob", CueLeft_s.prob)
    TextComponent text_check_s
      font = $font_choice
      letterHeight = 0.025
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Welches dieser Symbole ist eher ein Lob?
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    ImageComponent cue_left_s
      image = $CueLeft_s.path
      pos = (-0.3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent cue_right_s
      image = $CueRight_s.path
      pos = (0.3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    SliderComponent slider_check_s
      fillColor = White
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine check_nonsocial
    CodeComponent code_check_ns
      Code Type = Both
      End JS Routine:
        if (slider_check_ns.getRating() > 3){
                resp = "right";
        } else {
                resp = "left";
        }

        console.log("resp_ns: ", resp)

        thisExp.addData("slider_check_ns: ", slider_check_ns.getRating())
        thisExp.addData("resp_check_ns", resp)
        thisExp.addData("CueRight_ns.path", CueRight_ns.path)
        thisExp.addData("CueRight_ns.prob", CueRight_ns.prob)
        thisExp.addData("CueLeft_ns.path", CueLeft_ns.path)
        thisExp.addData("CueLeft_ns.prob", CueLeft_ns.prob)
    TextComponent text_check_ns
      font = $font_choice
      letterHeight = 0.025
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Welches dieser Symbole startet eher das Kaleidoskop?
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    ImageComponent cue_left_ns
      image = $CueLeft_ns.path
      pos = (-0.3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent cue_right_ns
      image = $CueRight_ns.path
      pos = (0.3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    SliderComponent slider_check_ns
      fillColor = White
      forceEndRoutine = True
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine check_instr
    TextComponent check_instr_text
      color = $color_choice
      font = $font_choice
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      wrapWidth = 70
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      text:
        Sie haben nun den Lernteil des Experiments abgeschlossen.
        Bitte beantworten Sie jetzt auch die folgenden kurzen Fragen!

        Drücken Sie eine beliebige Taste, um fortzufahren!
    KeyboardComponent check_instr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Welcome
  Routine instr_train_s
  LoopInitiator training_social loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = trainingtrials_social.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'filename_neutral': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/ADFES/Freigestellt/Neutral/F01-Neutral-Face Forward_freigestellt.mp4', 'filename_feedback_happy': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/ADFES/Freigestellt/Joy/Used/F01-Joy-Face Forward_freigestellt.mp4', 'filename_feedback_angry': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/ADFES/Freigestellt/Anger/F01-Anger-Face Forward_freigestellt.mp4'},
      {'filename_neutral': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/ADFES/Freigestellt/Neutral/F04-Neutral-Face Forward_freigestellt.mp4', 'filename_feedback_happy': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/ADFES/Freigestellt/Joy/Used/F04-Joy-Face Forward_freigestellt.mp4', 'filename_feedback_angry': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/ADFES/Freigestellt/Anger/F04-Anger-Face Forward_freigestellt.mp4'},
      {'filename_neutral': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/ADFES/Freigestellt/Neutral/M02-Neutral-Face Forward_freigestellt.mp4', 'filename_feedback_happy': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/ADFES/Freigestellt/Joy/Used/M02-Joy-Face Forward_freigestellt.mp4', 'filename_feedback_angry': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/ADFES/Freigestellt/Anger/M02-Anger-Face Forward_freigestellt.mp4'},
      {'filename_neutral': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/ADFES/Freigestellt/Neutral/M06-Neutral-Face Forward_freigestellt.mp4', 'filename_feedback_happy': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/ADFES/Freigestellt/Joy/Used/M06-Joy-Face Forward_freigestellt.mp4', 'filename_feedback_angry': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/ADFES/Freigestellt/Anger/M06-Anger-Face Forward_freigestellt.mp4'}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
    Routine training_trial
    Routine feedback_train
  LoopTerminator training_social
  Routine Alles_klar
  Routine instr_train_ns
  LoopInitiator training_nonsocial loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = trainingtrials_nonsocial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'filename_neutral': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/Mandalas_new/neutral/Mandala1_neutral.mp4', 'filename_feedback_happy': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/Mandalas_new/happy/Mandala1_happy.mp4', 'filename_feedback_angry': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/Mandalas_new/angry/Mandala1_angry.mp4'},
      {'filename_neutral': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/Mandalas_new/neutral/Mandala2_neutral.mp4', 'filename_feedback_happy': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/Mandalas_new/happy/Mandala2_happy.mp4', 'filename_feedback_angry': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/Mandalas_new/angry/Mandala2_angry.mp4'},
      {'filename_neutral': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/Mandalas_new/neutral/Mandala3_neutral.mp4', 'filename_feedback_happy': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/Mandalas_new/happy/Mandala3_happy.mp4', 'filename_feedback_angry': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/Mandalas_new/angry/Mandala3_angry.mp4'},
      {'filename_neutral': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/Mandalas_new/neutral/Mandala4_neutral.mp4', 'filename_feedback_happy': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/Mandalas_new/happy/Mandala4_happy.mp4', 'filename_feedback_angry': '/Users/raimundbuehler/Documents/UNIDOCS/Python:Psychopy:RALT/RALT 2 - return of the RALT/Mandalas_new/angry/Mandala4_angry.mp4'}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
    Routine training_trial
    Routine feedback_train
  LoopTerminator training_nonsocial
  Routine Alles_Klar_2
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 4
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    Routine BlockCode
    LoopInitiator cycles loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 6
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      Routine LateralizationByCycle
      LoopInitiator trials loopType="TrialHandler"
        loopType = random
        nReps = 4
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        Routine trial
        Routine feedback_trials
        Routine Intertrial_Interval
      LoopTerminator trials
      Routine LatCounter
    LoopTerminator cycles
    Routine BlockCounter
  LoopTerminator blocks
  Routine check_instr
  Routine check_social
  Routine check_nonsocial
  Routine Thanks
